<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:tkf="clr-namespace:Bonsai.Tinkerforge;assembly=Bonsai.Tinkerforge"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:CreateBrickConnection">
          <tkf:HostName>localhost</tkf:HostName>
          <tkf:Port>4223</tkf:Port>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:GPSV2">
          <tkf:Uid>PvW</tkf:Uid>
          <tkf:SBAS>Disabled</tkf:SBAS>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
          <tkf:DateTimePeriod>10</tkf:DateTimePeriod>
          <tkf:AltitudePeriod>100</tkf:AltitudePeriod>
          <tkf:CoordinatePeriod>100</tkf:CoordinatePeriod>
          <tkf:StatusPeriod>1000</tkf:StatusPeriod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:GPSV2DateTime" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Time</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:GPSV2Coordinate">
          <tkf:Period>1000</tkf:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Latitude</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:HumidityV2">
          <tkf:Uid>WhE</tkf:Uid>
          <tkf:Period>100</tkf:Period>
          <tkf:Heater>Disabled</tkf:Heater>
          <tkf:MovingAverageLengthTemperature>5</tkf:MovingAverageLengthTemperature>
          <tkf:MovingAverageLengthHumidity>5</tkf:MovingAverageLengthHumidity>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:SoundPressureLevel">
          <tkf:Uid>XzC</tkf:Uid>
          <tkf:Period>10</tkf:Period>
          <tkf:FftSize>FftSize512</tkf:FftSize>
          <tkf:Weighting>WeightingITU</tkf:Weighting>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:AmbientLightV3">
          <tkf:Uid>L3J</tkf:Uid>
          <tkf:Period>100</tkf:Period>
          <tkf:IlluminanceRange>Range64000Lux</tkf:IlluminanceRange>
          <tkf:IntegrationTime>Integration50ms</tkf:IntegrationTime>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:AirQuality">
          <tkf:Uid>Xco</tkf:Uid>
          <tkf:Period>1000</tkf:Period>
          <tkf:TemperatureOffset>0</tkf:TemperatureOffset>
          <tkf:BackgroundCalibrationDuration>Days4</tkf:BackgroundCalibrationDuration>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>IaqIndex</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:CO2V2">
          <tkf:Uid>Lhu</tkf:Uid>
          <tkf:Period>100</tkf:Period>
          <tkf:AirPressure>0</tkf:AirPressure>
          <tkf:TemperatureOffset>0</tkf:TemperatureOffset>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Co2Concentration</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Temperature</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="tkf:ThermocoupleV2">
          <tkf:Uid>WpT</tkf:Uid>
          <tkf:Period>100</tkf:Period>
          <tkf:Averaging>Averaging16</tkf:Averaging>
          <tkf:Type>TypeK</tkf:Type>
          <tkf:Filter>Filter50Hz</tkf:Filter>
          <tkf:StatusLed>ShowStatus</tkf:StatusLed>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="0" To="8" Label="Source1" />
      <Edge From="0" To="9" Label="Source1" />
      <Edge From="0" To="11" Label="Source1" />
      <Edge From="0" To="14" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>